PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'group': '', 'survey-url': '', 'language': 'EN', 'touchscreen': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['html/resources/trailmaking_text.xlsx']
  Screen = 1
  Units = height
  Use version = 2020.1.3
  Window size (pixels) = [1280, 800]
  expName = trailMaking
  exportHTML = on Save
  logging level = debug
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Routines
  Routine trial
    CodeComponent targetCode
      Code Type = JS
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      Begin JS Experiment:
        trialTargets = [];
        trialTargetLabels = [];
        trialLines = [];
        loopCounter = 0;
      Begin JS Routine:
        loopCounter += 1;
        trialStep = 0;

        // Keep track of steps for the
        steps = [];
        step = 0;
        number_of_targets = 18; // Change number of targets here

        trialTargets = [];
        trialTargetLabels = [];
        trialLines = [];

        // For creating unique labels
        // Class from https://stackoverflow.com/questions/12504042/what-is-a-method-that-can-be-used-to-increment-letters
        class StringIdGenerator {
          constructor(chars = 'ABCDEFGHIJKLMNOPQRSTUVWXYZ') {
            this._chars = chars;
            this._nextId = [0];
          }

          next() {
            const r = [];
            for (const char of this._nextId) {
              r.unshift(this._chars[char]);
            }
            this._increment();
            return r.join('');
          }

          _increment() {
            for (let i = 0; i < this._nextId.length; i++) {
              const val = ++this._nextId[i];
              if (val >= this._chars.length) {
                this._nextId[i] = 0;
              } else {
                return;
              }
            }
            this._nextId.push(0);
          }

          *[Symbol.iterator]() {
            while (true) {
              yield this.next();
            }
          }
        }

        const alphaID = new StringIdGenerator();

        // Improve on this algorithm
        allCoordinates = function() {
            var coordArray = [];
            var offset;
            var newX, newY;

            for ( var x = 0.4; x >= -0.4; x -= 0.1) {
                for ( var y = 0.4; y >= -0.4; y -=0.1 ) {

                  // set distance to move the target
                  offset = Math.random() * 2 * Math.PI;
                  newX = x + 0.02 * Math.cos(offset);
                  newY = y + 0.02 * Math.sin(offset);
                  coordArray.push([newX, newY]);
                }
            }
            return coordArray;
        }
        .call(this);

        util.shuffle(allCoordinates);

        // How many targets are needed?
        choiceCoordinates = allCoordinates.slice(0, number_of_targets);

        // Make and label the targets
        for (var index in choiceCoordinates) {
            trialTargets.push(
                new visual.Polygon({
                        win: psychoJS.window,
                        name: "trialTarget" + index,
                        edges: 30,
                        size: [0.05, 0.05],
                        ori: 0,
                        pos: choiceCoordinates[index],
                        lineWidth: 1,
                        lineColor: new util.Color([1, 1, 1]),
                        lineColorSpace: "rgb",
                        fillColor: new util.Color([1, 1, 1]),
                        fillColorSpace: "rgb",
                        opacity: 0.25,
                        interpolate: true,
                    })
            );
            trialTargetLabels.push(
                new visual.TextStim({
                    win: psychoJS.window,
                    name: "label" + index,
                    text: -1,
                    font: 'Courier',
                    pos: choiceCoordinates[index], height: 0.03, ori: 0,
                    color: new util.Color('black'),  opacity: 1,
                    depth: -1.0
                  })
            );
            if (index % 2 == 0) {
                trialTargetLabels[index].text = parseInt(index, 10)/2 + 1;
            } else {
                trialTargetLabels[index].text = alphaID.next();
            }
        }

        makeLines = function() {
            for (var index = 0; index < (choiceCoordinates.length ); index++) {
                if ( index == 0 ) {
                    trialLines.push(
                        new visual.ShapeStim({
                            win: psychoJS.window,
                            vertices: [ (0,0), (0,0) ],
                            opacity: 0,
                        })
                    );
                } else {
                    trialLines.push(
                        new visual.ShapeStim({
                            win: psychoJS.window,
                            vertices: [ trialTargets[index-1].pos, trialTargets[index].pos ],
                            opacity: 0,
                            lineWidth: 1,
                        })
                    );
                }
            }
        }
        .call(this);

        // Function to delay before the the next routine runs
        waitTime = function (t) {
            const currentTime = globalClock.getTime();
            waitTime = function (a) {
                return currentTime + t;
            };
            return waitTime(0);
        };

        //CursorTargetDistance = function (trialStep) {
        //    var Xpos, Ypos;
        //    if (trialStep >= 0) {
        //        Xpos = trialTargets[trialStep].pos[0];
        //        Ypos = trialTargets[trialStep].pos[1];
        //    } else {
        //        Xpos = 0;
        //        Ypos = 0;
        //    }
        //    return Math.sqrt(
        //        Math.pow( (trialCursor.pos[0] - Xpos), 2 ) +
        //        Math.pow( (trialCursor.pos[1] - Ypos), 2 )
        //    );
        //}

        PrevCursorTargetDistance = function (tstep) {

            if (tstep > 0) {
               return Math.sqrt(
                    Math.pow( (trialCursor.pos[0] - trialTargets[tstep-1].pos[0]), 2 ) +
                    Math.pow( (trialCursor.pos[1] - trialTargets[tstep-1].pos[1]), 2 )
                );
            } else {
               return Math.sqrt(
                    Math.pow( trialCursor.pos[0], 2 ) +
                    Math.pow( trialCursor.pos[1], 2 )
                );
            }
        }
        data_stimulusXPos = [];
        data_stimulusYPos = [];
        data_stimLabels = [];

        trialTargets.forEach( thisComponent => data_stimulusXPos.push(thisComponent.pos[0]) );
        trialTargets.forEach( thisComponent => data_stimulusYPos.push(thisComponent.pos[1]) );
        trialTargetLabels.forEach( thisComponent => data_stimLabels.push(thisComponent.text) );

        trialTargets.forEach( thisComponent => thisComponent.setAutoDraw(true) );
        trialTargetLabels.forEach( thisComponent => thisComponent.setAutoDraw(true) );
        trialLines.forEach( thisComponent => thisComponent.setAutoDraw(true) );
      Each JS Frame:
        console.log(PrevCursorTargetDistance(trialStep-1));

        if ( trialStep < trialTargets.length ) {
            CursorTargetDistance = Math.sqrt(
                Math.pow( (trialCursor.pos[0] - trialTargets[trialStep].pos[0]), 2 ) +
                Math.pow( (trialCursor.pos[1] - trialTargets[trialStep].pos[1]), 2 )
            );

            // Check if the mouse left the previous cursor
            if ( trialStep <= 0 && (PrevCursorTargetDistance(trialStep) < trialTargets[trialStep].size[0]/2) ) {
                console.log("in old");
                console.log(trialStep);
                steps.push(trialStep);
            } else if ( trialStep > 0 && PrevCursorTargetDistance(trialStep) < trialTargets[trialStep-1].size[0]/2) {
                console.log("in old");
                console.log(trialStep);
                steps.push(trialStep);
            } else if ( CursorTargetDistance >= trialTargets[trialStep].size[0]/2 ) {
                console.log("going new");
                console.log(trialStep+0.5);
                steps.push(trialStep+0.5);
            } else if ( CursorTargetDistance < trialTargets[trialStep].size[0]/2 ) {
                console.log("in new");
                trialTargets[trialStep].opacity = 0;
                trialTargetLabels[trialStep].opacity = 0.25;
                trialLines[trialStep].opacity = 1;
                trialStep += 1;
                console.log(trialStep);
                steps.push(trialStep);
            }

        } else {

            if( globalClock.getTime() > waitTime(0.5) ) {
                continueRoutine = false;
            }
        }

        incrementStepOnce = function () {
            step = step + 0.5;
        }
      End JS Routine:
        trialTargets.forEach( thisComponent => thisComponent.setAutoDraw(false) );
        trialTargetLabels.forEach( thisComponent => thisComponent.setAutoDraw(false) );
        trialLines.forEach( thisComponent => thisComponent.setAutoDraw(false) );

        psychoJS.experiment.addData("cumulativetime", globalClock.getTime());
        psychoJS.experiment.addData( "stimulusX", data_stimulusXPos);
        psychoJS.experiment.addData( "stimulusY", data_stimulusYPos);
        psychoJS.experiment.addData( "stimulusSymbol", data_stimLabels);
        psychoJS.experiment.addData( "steps", steps );
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent trialCursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (trialMouse.getPos()[0], trialMouse.getPos()[1])
      shape = regular polygon...
      size = (0.001, 0.001)
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instr_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = $myText.trialList[0][whichText]
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trialRound
    TextComponent trialCount
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $(loopCounter+1) + " / " + 5
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  Routine trialEnd
    TextComponent results
      color = orange
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = Your time will be displayed here.
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    CodeComponent endCode
      Code Type = JS
      Begin JS Experiment:
        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }
      Begin JS Routine:
        if ( loopCounter > 0 ) {
            results.text = myText.trialList[1][whichText] + round(trialMouse.time[(trialMouse.time.length - 1)], 2).toString() + myText.trialList[2][whichText];
        }
    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        thisExp = psychoJS.experiment;
    CodeComponent getText
      Code Type = JS
      Begin JS Experiment:
        //get instruction text from excel spreadsheet

        textFile = "trailmaking_text.xlsx"

        myText = new TrialHandler({
          psychoJS: psychoJS,
          nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
          extraInfo: expInfo, originPath: undefined,
          trialList: textFile,
          seed: undefined, name: 'myText'});

          if ((expInfo["touchscreen"] === "0")) {
            whichText = (expInfo["language"].toString() + "_notouchscreen");
            } else {
              whichText = (expInfo["language"].toString() + "_touchscreen");
            }
    CodeComponent set_URL_msgbox
      Code Type = JS
      Begin JS Experiment:
        //define completed URL
        if (expInfo['group'].indexOf("EDS_") >= 0) {
            psychoJS.setRedirectUrls();
            } else {
                    psychoJS.setRedirectUrls(
                    expInfo['survey-url']+"?id="+expInfo['participant']+"&group="+expInfo['group'], //completed URL
                    expInfo['survey-url']+"?id="+expInfo['participant']+"&group="+expInfo['group'] //incomplete URL
                    );
                    }
      End JS Experiment:
        //modify end of experiment message
        if (expInfo['group'].indexOf("EDS_") >= 0) {
            message = "[EN] You can click the 'Ok' button and then close this tab. [FR] Vous pouvez cliquer sur le bouton 'Ok' puis fermer cet onglet.";
            } else {
                message = "";
                }
Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trialRound
    Routine trial
    Routine trialEnd
  LoopTerminator trials
